<?xml version='1.0'?>
<model name="Cytokine_Secretion" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="cytokines">
        <variable name="t" public_interface="in" units="s"/>
        <variable initial_value="1000" name="ERKPP" units="nm"/>
        <!--later pub in when combine .Stand alone model -->
        <variable name="J29" units="flux"/>
        <variable initial_value="0" name="TNF" public_interface="out" units="nm"/>
        <variable initial_value="0.00013127" name="kf31" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J29</ci>
                <apply>
                    <times/>
                    <ci>kf31</ci>
                    <ci>ERKPP</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>TNF</ci>
                </apply>
                <ci>J29</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="cytokines"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
